CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:Raw
    Name the output name:Hematoxylin
    Stain:Hematoxylin
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    Name the output name:DAB
    Stain:DAB
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:ShrunkenNuclei
    Name the output image:NucImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:NucImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Elsewhere...|D:\\\\\\\\Study\\\\\\\\BCL2 IHC\\\\\\\\NucImage
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:DAB
    Select objects to measure:ShrunkenNuclei

ClassifyObjects:[module_num:11|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:ShrunkenNuclei
    Select the measurement to classify by:Intensity_MeanIntensityEdge_DAB
    Select bin spacing:Custom-defined bins
    Number of bins:4
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.1, 0.3, 0.6
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Negative, Weak, Moderate, Strong
    Retain an image of the classified objects?:Yes
    Name the output image:ClassifiedNuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:ClassifiedNuclei
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Elsewhere...|D:\\\\\\\\Study\\\\\\\\BCL2 IHC\\\\\\\\ClassifiedImage
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\\\\\\\Study\\\\\\\\BCL2 IHC\\\\\\\\QuantResult
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|Number_Object_Number,ShrunkenNuclei|Intensity_MassDisplacement_DAB,ShrunkenNuclei|Intensity_MinIntensity_DAB,ShrunkenNuclei|Intensity_StdIntensity_DAB,ShrunkenNuclei|Intensity_IntegratedIntensityEdge_DAB,ShrunkenNuclei|Intensity_UpperQuartileIntensity_DAB,ShrunkenNuclei|Intensity_LowerQuartileIntensity_DAB,ShrunkenNuclei|Intensity_MinIntensityEdge_DAB,ShrunkenNuclei|Intensity_MADIntensity_DAB,ShrunkenNuclei|Intensity_MeanIntensity_DAB,ShrunkenNuclei|Intensity_MeanIntensityEdge_DAB,ShrunkenNuclei|Intensity_MaxIntensity_DAB,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:10S-002840_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ShrunkenNuclei
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

ConserveMemory:[module_num:14|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
    Specify which images?:Images to remove
    Select image to remove:ClassifiedNuclei
    Select image to remove:DAB
    Select image to remove:Hematoxylin
    Select image to remove:Raw
